/**
 * Script to calculate the segmentation error between some 2D 
 * original labels and their corresponding proposed labels. 
 * 
 * The evaluation metrics are:
 *  - Pixel error: 1 - maximal F-score of pixel similarity
 *  - Minimum Splits & Mergers Warping error
 *  - Foreground-restricted Rand error: 1 - maximal F-score of 
 *    foreground-restricted Rand index
 * 
 * @author Ignacio Arganda-Carreras (iarganda@mit.edu)
 * @version January 22, 2015
 */
 
import trainableSegmentation.metrics.*;
import ij.WindowManager;
import ij.gui.GenericDialog;
import ij.IJ;

 
// Get the list of images that are open
ids = WindowManager.getIDList();
 
if ( ids == null || ids.length < 2 )
{
    // Prompt user to open two image files if fewer than 2 images are open
    IJ.showMessage("Not enough images open", "Please select two image files to open.");
    od1 = new ij.io.OpenDialog("Select original labels", null);
    path1 = od1.getPath();
    if (path1 == null) return;
    img1 = IJ.openImage(path1);
    if (img1 != null) img1.show();

    od2 = new ij.io.OpenDialog("Select proposed labels", null);
    path2 = od2.getPath();
    if (path2 == null) return;
    img2 = IJ.openImage(path2);
    if (img2 != null) img2.show();

    ids = WindowManager.getIDList();
    if ( ids == null || ids.length < 2 )
    {
        IJ.showMessage("Failed to open two images.");
        return;
    }
}
 
// Get all the titles of the open images        
titles = new String[ ids.length ];
for ( int i = 0; i < ids.length; ++i )
{
    titles[ i ] = ( WindowManager.getImage( ids[ i ] ) ).getTitle();
}
 
// Create dialog        
gd = new GenericDialog( "Evaluate segmentation results" );
         
gd.addMessage( "Image Selection:" );
current = WindowManager.getCurrentImage().getTitle();
gd.addChoice( "Original_labels", titles, current );
gd.addChoice( "Proposal", titles, current.equals( titles[ 0 ] ) ? titles[ 1 ] : titles[ 0 ] );
         
gd.addMessage( "Segmentation error metrics:" );
gd.addCheckbox( "Maximal F-score pixel_error", true );
gd.addCheckbox( "Minimum split-mergers ratio", true );
gd.addCheckbox( "Maximal F-Score foreground-restricted Rand index", true );

gd.showDialog();
         
if (gd.wasCanceled()) 
    return;
         
originalLabels = WindowManager.getImage( ids[ gd.getNextChoiceIndex() ] );
proposedLabels = WindowManager.getImage( ids[ gd.getNextChoiceIndex() ] );
 
calculatePixelError = gd.getNextBoolean();
calculateWarpingError = gd.getNextBoolean();
calculateRandError = gd.getNextBoolean();
         
 
IJ.log("---");
IJ.log("Evaluating segmentation...");
IJ.log("  Original labels: " + originalLabels.getTitle());
IJ.log("  Proposed labels: " + proposedLabels.getTitle() + "\n");

 
// Calculate segmentation error with the selected metrics
 
if( calculatePixelError )
{
    IJ.log("\nCalculating pixel error...");
    metric = new PixelError( originalLabels, proposedLabels );
    maxFScore = metric.getPixelErrorMaximalFScore( 0.0, 1.0, 0.1 ); 
    IJ.log("  Minimum pixel error: " + (1.0 - maxFScore) ); 
}

if( calculateWarpingError )
{
    IJ.log("\nCalculating warping error by minimizing splits and mergers...");
    metric = new WarpingError( originalLabels, proposedLabels );    
    warpingError = metric.getMinimumSplitsAndMergersErrorValue( 0.0, 0.9, 0.1, false, 20 );
    IJ.log("  Minimum warping error: " + warpingError);
    IJ.log("  # errors (splits + mergers pixels) = " + Math.round(warpingError * originalLabels.getWidth() * originalLabels.getHeight() * originalLabels.getImageStackSize() ) );
}
 
if( calculateRandError )
{   
    IJ.log("\nCalculating maximal F-score of the foreground-restricted Rand index...");
    metric = new RandError( originalLabels, proposedLabels );
    maxFScore = metric.getForegroundRestrictedRandIndexMaximalFScore( 0.0, 1.0, 0.1 );  
    IJ.log("  Minimum foreground-restricted Rand error: " + (1.0 - maxFScore) );     
}
